# Generated by Configurator on Tue Sep 19 11:29:06 PDT 2017

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,FreeSerialPort,FreeSerialPort,FreeSerialPort

# Pre-init settings for devices
Property,FreeSerialPort,Port,COM3

# Pre-init settings for COM ports
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

